        // Select neuron
        repeatTimes = 1;
        do{
            // Wait user to select neurons
            waitForUser("Select neurons");
        
            // Measure coordinates of selected neurons
            run("Measure");
      
        // Change image type. 8bit color -> RGB color
        run("RGB Color");
        
            // Get coordinates of selected neurons
            x = newArray(nResults);
            y = newArray(nResults);
            for(ii = 0; ii < nResults; ii++){
                x[ii] = getResult("X", ii);
                y[ii] = getResult("Y", ii);
            }
            
            // Close a result window
            resultNumber = nResults;
            run("Clear Results");
            
            // Detect the center of soma(Center of Mass)
            xm = newArray(resultNumber);
            ym = newArray(resultNumber);
            for(ii = 0; ii < resultNumber; ii++){
        
                // Find Center of Mass
                makeOval(x[ii]-12.5, y[ii]-12.5, 25, 25); // Make circle surounding soma (diameter is 1.2 times larger than soma)        
                run("Measure");            
                // Get the coordinate
                xm[ii] = getResult("XM", ii);
                ym[ii] = getResult("YM", ii);
            }
            // Save the results table as exel file
   //         saveAs("Results", dir + fileName + "xmym" + repeatTimes ".xls");
            repeatTimes = repeatTimes + 1;
            
            // plot the center of soma
            for(ii = 0; ii < resultNumber; ii++){
                           
                // Select the center of soma
                run("Specify...", "width=10 height=10 x=" + xm[ii] + " y=" + ym[ii] + " oval constrain centered");

                // Coloring the center of soma
                run("Fill", "slice"); 
            }
        
            // Ask users if they selected all neurons
            Dialog.create("Selected all neurons?");
            Dialog.addCheckbox("Yeah!!!", true);
            Dialog.show();
            flag = Dialog.getCheckbox();
        } while(flag != 1);